[[model]]
name: Majumder 2016 hyperpolarisation activated non-selective cation current
author: Charles Houston

# Initial values
membrane.V = -67
iha.y = 0.01

[environment]
time = 0 bind time
    in [ms]

[membrane]
dot(V) = -iha.i_ha
    in [mV]
T = 310
    in [K]
F = 96.5
    in [C/mmol]
R = 8.314
    in [J/mol/K]
Ko = 25000 # modified Tyrode soln from Sartiani
    in [uM]
Ki = 120000
    in [uM]
Nai = 5400
    in [uM]
Nao = 140000
    in [uM]

[iha]
g_ha = 0.021 [mS/uF]
    in [mS/uF]

y_ss = 1 / (1 + exp((membrane.V + k_yss1) / k_yss2))
    in [1]
k_yss1 = 78.65 [mV]
    in [mV]
k_yss2 = 6.33 [mV]
    in [mV]

tau_y = 1000 * k_ytau1 / (k_ytau2 * exp((membrane.V + k_ytau3) / k_ytau4) + k_ytau5 * exp((membrane.V + k_ytau6) / -k_ytau7))
    in [ms]
k_ytau1 = 1 [ms]
    in [ms]
k_ytau2 = 0.11885
    in [1]
k_ytau3 = 75 [mV]
    in [mV]
k_ytau4 = 28.37 [mV]
    in [mV]
k_ytau5 = 0.56236
    in [1]
k_ytau6 = 75 [mV]
    in [mV]
k_ytau7 = 14.19 [mV]
    in [mV]

dot(y) = (y_ss - y) / tau_y
    in [1]

E_Na = membrane.R * membrane.T / membrane.F * log(membrane.Nao / membrane.Nai)
    in [mV]
E_K = membrane.R * membrane.T / membrane.F * log(membrane.Ko / membrane.Ki)
    in [mV]

G_ha = g_ha * y
    in [mS/uF]
i_haNa = G_ha * k_i_haNa * (membrane.V - E_Na)
    in [pA/pF]
i_haK = G_ha * (1-k_i_haNa) * (membrane.V - E_K)
    in [pA/pF]

k_i_haNa = 0.2
    in [1]

i_ha = i_haNa + i_haK
    in [pA/pF]
