[[model]]
name: COU
author: Charles Houston
desc:   """
        Ultrarapid delayed rectifier current from [Courtemanche1998]
        adjusted to standardised model temperature 310K.
        """

# Initial Conditions
membrane.V = -81.18
isus.a = 0.000137
isus.i = 0.999

[engine]
time = 0 bind time
    in [ms]

[membrane]
dot(V) = -isus.i_sus
    in [mV]
Cm = 100 [pF]

[phys]
F = 96.4867
    in [C/mmol]
R = 8.3143
    in [J/mol/K]
T = 310
    in [K]
FoRT = F/(R*T)

[k_conc]
use phys.FoRT as FoRT
K_i = 130 [mM]
K_o = 5.4 [mM]
E_K = 1/FoRT * log(K_o/K_i)

[isus]
use membrane.V as V
use k_conc.E_K as E_K 
use membrane.Cm as Cm

i_sus = g_sus * g * (V - E_K) * Cm
    in [pA]
g = a^3*i*(1 + r1/(1+exp((V+r2)/-r3)))
    in [1]
r1 = 10
r2 = -15 [mV]
r3 = 13 [mV]
K_Q10 = 3 # from [Courtemanche1998]
    in [1]

g_sus = 0.005
    in [nS/pF]

# Gating constants for a
p1 = 30.3 [mV]
p2 = 9.6 [mV]
p3 = 0.65 [ms]
p4 = 10 [mV]
p5 = 8.5 [mV]
p6 = -30 [mV]
p7 = 59 [mV]
p8 = 2.5 
p9 = 82 [mV]
p10 = 17 [mV]

dot(a) = (a_inf - a) / tau_a
    in [1]
a_inf = (1 + exp((V + p1) / -p2))^(-1)
    in [1]
alpha_a = p3*(exp((V + p4) / -p5) + exp((V + p6) / -p7))^(-1)
    in [ms]
beta_a = p3*(p8 + exp((V + p9)/p10))^(-1)
    in [ms]
tau_a = (alpha_a + beta_a)^(-1) / K_Q10


# Gating constants for i
q1 = -99.45 [mV]
q2 = 27.48 [mV]
q3 = 21 [ms]
q4 = -185 [mV]
q5 = 28 [mV] 
q6 = -158 [mV]
q7 = 16 [mV]

dot(i) = (i_inf - i) / tau_i
    in [1]
i_inf = (1 + exp((V + q1) / q2))^(-1)
    in [1]
alpha_i = (q3 + exp((V+q4)/-q5))^(-1)
    in [1/ms]
beta_i = exp((V+q6)/q7)
    in [1/ms]
tau_i = (alpha_i + beta_i)^(-1) / K_Q10
    in [ms]
