[[model]]
author: Cellml converter
desc: """
    Mathematical Model Of An Adult Human Atrial Cell, 1998
    i_Ca_L channel.
    Temperature adjusted to 310K using Q10 factor.
    """
name: NYG

# Initial values
membrane.V = -74.2525
ical.d   =  1.30050000000000000e-5
ical.f_1 = 0.9986
ical.f_2 = 0.9986

[engine]
time = 0 bind time
    in [ms]

[phys]
F = 96487 [C/mol]
R = 8314 [mJ/mol/K]
T = 310 [K]
FoRT = F/(R*T)

[membrane]
Cm = 0.05 [nF]
dot(V)  = -ical.i_CaL / Cm
    in [mV]

[ca_conc]
Ca_i = 7.24950000000000030e-5 [mM]
Ca_o = 1 [mM]
Ca_d = Ca_i
    in [mM]

[ical]
use membrane.Cm as Cm
use membrane.V as V
use ca_conc.Ca_d as Ca_d

i_CaL = g_Ca_L * g * (V - E_Ca_app)
    in [pA/pF]
g = d * (f_Ca * f_1 + (1 - f_Ca) * f_2)

K_Q10_act = 1.7^((306.15-310)/10)
K_Q10_inact = 1.3^((306.15-310)/10)

g_Ca_L = 6.75
    in [nS]
E_Ca_app = 60
    in [mV]
f_Ca = 0.5 # set to eliminate calcium-dependence (was: Ca_d / (Ca_d + k_Ca))
    in [1]
k_Ca = 0.025
    in [mM]

dot(d) = (d_inf - d) / tau_d
    in [1]
d_inf = 1 / (1 + exp((V + p1) / -p2))
    in [1]
tau_d = K_Q10_act*1000 * (p3 * exp(-((V + p4) / p5) ^ 2) + p6)
    in [ms]
    
p1 = 9 [mV]
p2 = 5.8 [mV]
p3 = 0.0027 [s]
p4 = 35 [mV]
p5 = 30 [mV]
p6 = 0.002 [s]

dot(f_1) = (f_inf - f_1) / tau_f_1
    in [1]
f_inf = 1 / (1 + exp((V + q1) / q2))
    in [1]
tau_f_1 = K_Q10_inact*1000 * (q3 * exp(-((V + q4) / q5) ^ 2) + q6)
    in [ms]
    
q1 = 27.4 [mV]
q2 = 7.1 [mV]
q3 = 0.161 [s]
q4 = 40 [mV]
q5 = 14.4 [mV]
q6 = 0.01 [s]

dot(f_2) = (f_inf - f_2) / tau_f_2
    in [1]
tau_f_2 = K_Q10_inact*1000 * (r1 * exp(-((V + r2) / r3) ^ 2) + r4)
    in [ms]

r1 = 1.3323 [s]
r2 = 40 [mV]
r3 = 14.2 [mV]
r4 = 0.0626 [s]
