[[model]]
author: Cellml converter
desc: """
    Mathematical Model Of An Adult Human Atrial Cell, 1998
    i_sus channel.
    Temperature adjusted to 310K using Q10 factor.
    """
name: NYG

# Initial values
membrane.V = -74.2525
isus.r = 0.0010678
isus.s = 0.949

[engine]
time = 0 bind time
    in [ms]

[phys]
F = 96487 [C/mol]
R = 8314 [mJ/mol/K]
T = 310 [K]
FoRT = F/(R*T)

[membrane]
Cm = 0.05 [nF]
dot(V)  = -isus.i_sus / Cm
    in [mV]

[k_conc]
use phys.FoRT as FoRT
K_i = 7.24950000000000030e-5 [mM]
K_o = 1 [mM]
E_K = 1/FoRT * log(K_o/K_i)
    in [mV]

[isus]
use membrane.Cm as Cm
use membrane.V as V
use k_conc.E_K as E_K

i_sus = g_sus * g * (V - E_K)
    in [pA]
g = r * s
g_sus = 2.75
    in [nS]

K_Q10 = 2.2^((306.15-310)/10)

dot(r) = (r_inf - r) / tau_r
    in [1]
r_inf = 1 / (1 + exp((V + p1) / -p2))
    in [1]
tau_r = K_Q10*1000 * (p3 / (1 + exp((V + p4) / p5)) + p6)
    in [ms]
    
p1 = 4.3 [mV]
p2 = 8 [mV]
p3 = 0.009 [s]
p4 = 5 [mV]
p5 = 12 [mV]
p6 = 0.0005 [s]

dot(s) = (s_inf - s) / tau_s
    in [1]
s_inf = (1-q3) / (1 + exp((V + q1) / q2)) + q3
    in [1]
tau_s = K_Q10*1000 * (q4 / (1 + exp((V + q5) / q6)) + q7)
    in [ms]
    
q1 = 20 [mV]
q2 = 10 [mV]
q3 = 0.6
q4 = 0.047 [s]
q5 = 60 [mV]
q6 = 10 [mV]
q7 = 0.3 [s]
