[[model]]
name: STA
author: Charles Houston
desc: """
      Standardised model for ito current.
      Adjusted to 306.15K using Q10 factor.
      """

# Initial values
membrane.V = -80
ito.r = 0.0
ito.s = 1.0

[engine]
time = 0 bind time
    in [ms]

[phys]
F = 96.5 [C/mmol]
R = 8.314 [J/mol/K]
T = 306.15 [K]
FoRT = F / (R * T)
    in [1/mV]

[k_conc]
use phys.FoRT as FoRT
K_i = 130 [mM]
K_o = 5.4 [mM]
E_K = 1/FoRT * log(K_o/K_i)
    in [mV]

[membrane]
dot(V) = -ito.i_to
    in [mV]

[ito]
use membrane.V as V
use k_conc.E_K as E_K

K_Q10 = 2.2^((306.15-310)/10)

g_to = 0.1652 [nS]
g = r * s
    in [1]
i_to = g_to * g * (V - E_K)
    in [pA]

dot(r) = (r_ss - r) / tau_r
    in [1]
tau_r = 1 / (k_1 + k_2) / K_Q10
    in [ms]
r_ss = k_1 * tau_r
    in [1]

dot(s) = (s_ss - s) / tau_s
    in [1]
tau_s = 1 / (k_3 + k_4) / K_Q10
    in [ms]
s_ss = k_4 * tau_s
    in [1]

k_1 = p_1*exp(p_2 * V)
    in [1/ms]
k_2 = p_3*exp(-p_4 * V)
    in [1/ms]
k_3 = p_5*exp(p_6 * V)
    in [1/ms]
k_4 = p_7*exp(-p_8 * V)
    in [1/ms]

p_1 = 10^(1.3)
    in [1/ms]
p_2 = 0.014 [1/mV]
p_3 = 10^(-0.4)
    in [1/ms]
p_4 = 0.058 [1/mV]
p_5 = 10^(2.2) 
    in [1/ms]
p_6 = 0.11 [1/mV]
p_7 = 10^(-3.2) 
    in [1/ms]
p_8 = 0.051 [1/mV]
