[[model]]
author: Charles Houston
desc: """
    Computer model of action potential of HL-1 myocytes.
    Initially developed from model of mouse ventricular myocytes by
    Bondarenko et al., 2004.
    """
name: hl1

# Initial values
membrane.V = -68.0
ical.d = 0.0001075
ical.f = 0.9907780000000002
ical.fCa = 0.9965785
ina.m = 0.089167
ina.h = 0.527405
ina.j = 0.527337
ito.xto = 0.0024785
ito.yto = 0.9999894999999999
ikr.C_K1 = 0.1426775
ikr.C_K2 = 0.280485
ikr.O_K = 0.0052035
ikr.I_K = 0.00017950000000000003
ikur.a_ur = 0.10595349999999999
ikur.i_ur = 0.952489
icat.b = 0.001507
icat.g = 0.9842110000000001
iha.y = 0.434359
ryanodine_receptors.P_open = 0.012001999999999999
ca_conc_sr.Ca_SRuptake = 787.180644
ca_conc_sr.Ca_SRrelease = 776.6058415
ca_conc.Ca_i = 0.215237
na_conc.Na_i = 15558.639856999998
k_conc.K_i = 120499.57624000001


[environment]
time = 0 bind time
    in [ms]


[membrane]
# Extracellular ion concentrations set to values from Dias et al (2014)
Ca_o = 1800
    in [uM]
K_o = 4e3
    in [uM]
Na_o = 1.4e5
     in [uM]
Cm = 1
    in [uF/cm^2]
F = 96.5
    in [C/mmol]
R = 8.314
    in [J/mol/K]
T = 305
    in [K]
FoRT = F / (R * T)
    in [1/mV]


dot(V) = -(ical.i_CaL + incx.i_NCX + icab.i_Cab + ina.i_Na + inab.i_Nab + inak.i_NaK + ito.i_to + ik1.i_K1 + ikur.i_Kur + ikr.i_Kr + icat.i_CaT + iha.i_ha - i_stim) / Cm
    in [mV]
i_stim = 0.0
    in [pA/pF]

# Helper math declaration
pi = 3.14159265358979323846
    in [1]

Acap = 1.38544e-5
    in [cm^2]
r_SR = 6        # radius of SR
    in [um]
r_SL = 10.5     # radius of SL
    in [um]
V_myo = (4 / 3 * pi * r_SL ^ 3 - 4 / 3 * pi * r_SR ^ 3) / 1000
    in [pL]


# Fast sodium current - Korhonen et al. (2009)
[ina]
use membrane.V as V
use membrane.FoRT as FoRT
use membrane.Na_o as Na_o
use na_conc.Na_i as Na_i

g_Na = 35
    in [mS/uF]
E_Na = 1 / FoRT * log(Na_o/Na_i)
    in [mV]
G_Na = g_Na * m ^ 3 * h * j
    in [mS/uF]
i_Na = G_Na * (V - E_Na)
    in [pA/pF]

dot(m) = (m_ss - m) / tau_m
    in [1]
m_ss = (1 + exp((p1 + V) / p2)) ^ (-1)
    in [1]
tau_m = (p3 * (V + p4) / (1 - exp(p5 * (V + p4))) + p6 * exp(-V / p7)) ^ (-1)
    in [ms]
p1 = 45
p2 = -6.5
p3 = 0.32 / 1.36
p4 = 47.13
p5 = -0.1
p6 = 0.08 / 1.36
p7 = 11

dot(h) = (h_ss - h) / tau_h
    in [1]
h_ss = (1 + exp((q1 + V) / q2)) ^ (-1)
    in [1]
tau_h_high = q3 * (1 + exp((V + q4) / q5))
    in [ms]
tau_h_low = (q7 * exp((V + q8) / q9) + q10 * exp(q11 * V) + q12 * 1e5 * exp(q13 * V)) ^ (-1)
    in [ms]
tau_h = piecewise(V < -40, tau_h_low, tau_h_high)
    in [ms]
q1 = 76.1
q2 = 6.07
q4 = 10.66
q5 = -11.1
q6 = 3.49
q7 = 0.135 / 3.49
q8 = 80
q9 = -6.8
q10 = 3.56 / 3.49
q11 = 0.079
q12 = 3.1 / 3.49
q13 = 0.35
# Use p3 to match tau_h_low and tau_h_high at V=-40
q3 = ((1+exp((q4-40)/q5))*(q7*exp((q8-40)/q9)+q10*exp(q11*(-40))+q12*1e5*exp(q13*(-40))))^(-1)

dot(j) = (j_ss - j) / tau_j
    in [1]
j_ss = h_ss
    in [1]
tau_j_high = r1 * (1 + exp(r2 * (V + r3))) * (exp(r4 * 1e-7 * V)) ^ (-1)
    in [ms]
tau_j_low = r5 * ((V + r6) / (1 + exp(r7 * (V + r8))) * (r9 * 1e5 * exp(r10 * V) - r11 * 1e-5 * exp(r12 * V)) + r13 * exp(r14 * V) / (1 + exp(r15 * (V + r16)))) ^ (-1)
    in [ms]
tau_j = piecewise(V < -40, tau_j_low, tau_j_high)
    in [ms]

r2 = -0.1
r3 = 32
r4 = -2.535
r5 = 3.49
r6 = 37.78
r7 = 0.311
r8 = 79.23
r9 = -1.27140
r10 = 0.2444
r11 = 3.474
r12 = -0.04391
r13 = 0.1212
r14 = -0.01052
r15 = -0.1378
r16 = 40.14
# Use r1 to match tau_j_high and tau_j_low at V=-40
r1 = (exp(r4*1e-7*(-40))/(1+exp(r2*(r3-40))))*(r5*((r6-40)/(1+exp(r7*(r8-40)))*(r9*1e5*exp(r10*(-40))-r11*1e-5*exp(r12*(-40)))+r13*exp(r14*(-40))/(1+exp(r15*(r16-40))))^(-1))


# Rapid delayed rectifier K+ current - Korhonen et al. (2009)
[ikr]
use membrane.FoRT as FoRT
use membrane.V as V
use membrane.K_o as K_o
use k_conc.K_i as K_i
use membrane.Na_o as Na_o
use na_conc.Na_i as Na_i

g_Kr = 0.06
    in [mS/uF]
G_Kr = g_Kr * O_K
    in [mS/uF]
E_Kr = 1 / FoRT * log((0.98 * K_o + 0.02 * Na_o) / (0.98 * K_i + 0.02 * Na_i))
    in [mV]
i_Kr = G_Kr * (V - E_Kr)
    in [pA/pF]

alpha_a0 = p1 * exp(p2 * V)
    in [1]
alpha_a1 = p3 * exp(p4 * V)
    in [1]
alpha_i = p5 * exp(p6 * V)
    in [1]
beta_a0 = q1 * exp(q2 * V)
    in [1]
beta_a1 = q3 * 1e-3 * exp(q4 * V)
    in [1]
beta_i = q5 * exp(q6 * V)
    in [1]

p1 = 0.022348
p2 = 0.01176
p3 = 0.013733
p4 = 0.038198
p5 = 0.090821
p6 = 0.023391

q1 = 0.047002
q2 = -0.0631
q3 = 0.0689
q4 = -0.04178
q5 = 0.006497
q6 = -0.03268

k_f = 0.023761
k_b = 0.036778

dot(C_K1) = alpha_a0 * C_K0 - beta_a1 * C_K1 + k_b * C_K2 - k_f * C_K1
dot(C_K2) = k_f * C_K1 - k_b * C_K2 + beta_a1 * O_K - alpha_a1 * C_K2
dot(O_K) = alpha_a1 * C_K2 - beta_a1 * O_K + beta_i * I_K - alpha_i * O_K
dot(I_K) =  alpha_i * O_K - beta_i * I_K
C_K0 = 1 - (C_K1 + C_K2 + O_K + I_K)


# Ultrarapidly activating delayed rectifier K+ current
# - Bondarenko et al. (2004)
[ikur]
use membrane.V as V
use k_conc.E_K as E_K

g_Kur = 0.0975
    in [mS/uF]
G_Kur = g_Kur * a_ur * i_ur
    in [mS/uF]
i_Kur = G_Kur * (V - E_K)
    in [pA/pF]

dot(a_ur) = (a_ur_ss - a_ur) / tau_a_ur
    in [1]
a_ur_ss = 1 / (1 + exp(-(V + k_ass1) / k_ass2))
    in [1]
tau_a_ur = k_atau1 * exp(-(k_atau2 * 1e-2 * V)) + k_atau3
    in [ms]

k_ass1 = 22.5
    in [mV]
k_ass2 = 7.7
    in [mV]
k_atau1 = 0.493
    in [ms]
k_atau2 = 6.29
    in [1/mV]
k_atau3 = 2.058
    in [mV]

dot(i_ur) = (i_ur_ss - i_ur) / tau_i_ur
    in [1]
i_ur_ss = 1 / (1 + exp((V + k_iss1) / k_iss2))
    in [1]
tau_i_ur = k_itau1 * 1000 - k_itau2 * 100 / (1 + exp((V + k_iss1) / k_iss2))
    in [ms]

k_iss1 = 45.2
    in [mV]
k_iss2 = 5.7
    in [mV]
k_itau1 = 1.2
    in [ms]
k_itau2 = 1.7
    in [ms]


# Transient outward K+ current - Takeuchi et al. (2013)
[ito]
use membrane.V as V
use k_conc.E_K as E_K

g_to = 0.12375 [nS/pF]
     in [nS/pF]
G_to = g_to * xto * yto
    in [nS/pF]
i_to = G_to * (membrane.V - E_K)
    in [pA/pF]

xto_ss = 1 / (1 + exp(-(membrane.V - k_xss1) / k_xss2))
    in [1]
tau_xto = k_xtau1 + k_xtau2 * exp(-((membrane.V) / k_xtau3) ^ 2)
    in [ms]
yto_ss = 1 / (1 + exp((membrane.V + k_yss1) / k_yss2))
    in [1]
tau_yto = k_ytau1 + k_ytau2 * exp(-((membrane.V + k_ytau3) / k_ytau4) ^ 2)
    in [ms]
dot(xto) = (xto_ss - xto) / tau_xto
    in [1]
dot(yto) = (yto_ss - yto) / tau_yto
    in [1]
k_xss1 = 1 [mV]
    in [mV]
k_xss2 = 11 [mV]
    in [mV]
k_xtau1 = 1.5 [ms]
    in [ms]
k_xtau2 = 3.5 [ms]
    in [ms]
k_xtau3 = 30 [mV]
    in [mV]
k_yss1 = 40.5 [mV]
    in [mV]
k_yss2 = 11.5 [mV]
    in [mV]
k_ytau1 = 21.21 [ms]
    in [ms]
k_ytau2 = 38.4525 [ms]
    in [ms]
k_ytau3 = 52.45 [mV]
    in [mV]
k_ytau4 = 15.8827 [mV]
    in [mV]


# Hyperpolarisation activated nonselective cation current - Korhonen et al.
# (2009)
[iha]
use membrane.V as V
use na_conc.E_Na as E_Na
use k_conc.E_K as E_K

g_ha = 0.021
    in [mS/uF]
G_ha = g_ha * y
    in [mS/uF]
i_haNa = G_ha * k_i_haNa * (V - E_Na)
    in [pA/pF]
i_haK = G_ha * (1-k_i_haNa) * (V - E_K)
    in [pA/pF]

k_i_haNa = 0.2
    in [1]

i_ha = i_haNa + i_haK
    in [pA/pF]

dot(y) = (y_ss - y) / tau_y
    in [1]

y_ss = 1 / (1 + exp((V + p1) / p2))
    in [1]
p1 = 78.65
    in [mV]
p2 = 6.33
    in [mV]

tau_y = 1000 [ms] * (p3 * exp((V + p4)/p5) + p6 * exp((V + p7)/p8)) ^ (-1)
    in [ms]
p3 = 0.11885
    in [1]
p4 = 75
    in [mV]
p5 = 28.37
    in [mV]
p6 = 0.56236
    in [1]
p7 = 75
    in [mV]
p8 = -14.19
    in [mV]


# T-type Ca2+ current - Korhonen et al. (2009)
[icat]
use membrane.V as V
use ca_conc.E_Ca as E_Ca

g_CaT = 0.2
    in [mS/uF]
#E_CaT = 33
#    in [mV]
v_offset = 106.5
    in [mV]
G_CaT = g_CaT * b * g
    in [mS/uF]
i_CaT = G_CaT * (V - E_Ca + v_offset)
    in [pA/pF]

dot(b) = (bss - b) / tau_b
    in [1]
bss = (1 + exp(-(V + p1) / p2)) ^ (-1)
    in [mV]
tau_b = p3 + p4 * (1 + exp(p5 * (V + p6))) ^ (-1)
    in [ms]

p1 = 37.49098
p2 = 5.40634
p3 = 0.6
p4 = 5.4
p5 = 0.03
p6 = 100

dot(g) = (gss - g) / tau_g
    in [1]
gss = (1 + exp((V + q1) / q2)) ^ (-1)
    in [mV]
tau_g = q3 + q4 * (1 + exp(q5 * (V + q6))) ^ (-1)
    in [ms]

q1 = 66
q2 = 6
q3 = 1
q4 = 40
q5 = 0.08
q6 = 65


# L-type Ca2+ current - Korhonen et al. (2009)
[ical]
use membrane.V as V
use membrane.FoRT as FoRT
use membrane.F as F
use membrane.Ca_o as Ca_o
use ca_conc.Ca_subSL as Ca_subSL

i_CaL = G_CaL * 4 * V * F * FoRT * (Ca_subSL * exp(2 * V * FoRT) - 0.341 * Ca_o) / (exp(2 * V * FoRT) - 1)
    in [pA/pF]
g_CaL = 0.000063
    in [dm^3/F/ms]
open = d * f * fCa
    in [1]
G_CaL = g_CaL * open
    in [dm^3/F/ms]

dot(d) = (d_ss - d) / tau_d
    in [1]
d_ss = (1 + exp((p1 - V) / p2)) ^ (-1)
    in [1]
alpha_d = 1.4 * (1 + exp((p3 - V) / p4)) ^ (-1) + 0.25
    in [ms]
beta_d = 1.4 * (1 + exp((V + p5) / p6)) ^ (-1)
    in [ms]
gamma_d = (1 + exp((p7 - V) / p8)) ^ (-1)
    in [ms]
tau_d = alpha_d * beta_d + gamma_d
    in [ms]
p1 = -11.1
p2 = 7.2
p3 = -35
p4 = 13
p5 = 5
p6 = 5
p7 = 50
p8 = 20

dot(f) = (f_ss - f) / tau_f
    in [1]
f_ss = (1 + exp((q1 + V) / q2)) ^ (-1)
    in [1]
tau_f = q3 * exp(-(V + q4) ^ 2 / q5) + q6 * (1 + exp((q7 - V) / q8)) ^ (-1) + q9
    in [ms]
q1 = 23.3
q2 = 5.4
q3 = 1125
q4 = 27
q5 = 240
q6 = 165
q7 = 25
q8 = 10
q9 = 120

dot(fCa) = k * (fCa_ss - fCa) / tau_fCa
    in [1]
alpha_fCa = (1 + (Ca_subSL / r1) ^ 8) ^ (-1)
    in [1]
beta_fCa = r2 * (1 + exp((Ca_subSL - r3) / r4)) ^ (-1)
    in [1]
gamma_fCa = r5 * (1 + exp((Ca_subSL - r6) / r7)) ^ (-1)
    in [1]
fCa_ss = (alpha_fCa + beta_fCa + gamma_fCa + r8) / r9
    in [1]
tau_fCa = 10
    in [ms]
k = piecewise(fCa_ss > fCa and V > -60, 0, 1)
    in [1]
r1 = 0.4875
r2 = 0.1
r3 = 0.5
r4 = 0.1
r5 = 0.2
r6 = 0.75
r7 = 0.8
r8 = 0.23
r9 = 1.46


# Inward rectifying K+ current - Korhonen et al. (2009)
[ik1]
use membrane.K_o as K_o
use membrane.V as V
use k_conc.E_K as E_K

i_K1 = g_K1 * K_o / (K_o + k_1) * (V - E_K + k_2) / (k_3 + exp(k_4 * (V - E_K + k_2)))
    in [pA/pF]
g_K1 = 0.0515 [mS/uF]
    in [mS/uF]
k_1 = 210 [mM]
    in [mM]
k_2 = -6.1373 [mV]
    in [mV]
k_3 = 0.1653 [1/mV]
    in [1/mV]
k_4 = 0.0319
    in [1]


# Na+/Ca2+ exchanger current - Korhonen et al. (2009)
[incx]
use membrane.Na_o as Na_o
use membrane.Ca_o as Ca_o
use ca_conc.Ca_subSL as Ca_subSL
use membrane.V as V
use na_conc.Na_i as Na_i

k_NCX = 2.268 # scaling factor
    in [pA/pF/uM^4]
d_NCX = 1e-16 # denominator constant
    in [uM^-4]
gamma = 0.5 # energy barrier
    in [1]

i_NCX = k_NCX * 1e-16 * (Na_i ^ 3 * Ca_o * exp(0.03743 * gamma * V) - Na_o ^ 3 * Ca_subSL * exp(0.03743 * (gamma - 1) * V)) / (1 + d_NCX * (Na_o ^ 3 * Ca_subSL + Na_i ^ 3 * Ca_o))


# Na+/K+ ATPase - Korhonen et al. (2009)
[inak]
use membrane.V as V
use membrane.FoRT as FoRT
use na_conc.Na_i as Na_i
use membrane.K_o as K_o
use membrane.Na_o as Na_o

i_NaK_max = 2.7         # maximum current amplitude
    in [pA/pF]
n_NaK = 3.2             # hill coefficient for Na+
    in [1]
Km_Nai = 18600          # Na+ half saturation constant
    in [uM]
Km_Ko = 1500            # K+ half saturation constant
    in [uM]

f_NaK = (1 + 0.1245 * exp(-0.1 * V * FoRT) + 0.0365 * sigma * exp(-V * FoRT)) ^ (-1)
    in [1]
sigma = 1 / 7 * (exp(Na_o / 67300 [uM]) - 1)
    in [1]

i_NaK = i_NaK_max * f_NaK * (1 + (Km_Nai / Na_i) ^ n_NaK) ^ (-1) * (1 + (Km_Ko / K_o)) ^ (-1)
    in [pA/pF]


# Ca2+ background current - Korhonen et al. (2009)
[icab]
use membrane.V as V
use ca_conc.E_Ca as E_Ca

g_Cab = 0.0008
  in [mS/uF]
i_Cab = g_Cab * (V - E_Ca)
  in [pA/pF]

# Background Na+ current - Korhonen et al. (2009)
[inab]
use membrane.V as V
use na_conc.E_Na as E_Na

g_Nab = 0.0026
    in [mS/uF]
i_Nab = g_Nab * (V - E_Na)
    in [pA/pF]


# Sarcoplasmic reticulum - Korhonen et al. (2009)
[ryanodine_receptors]
k_RyR = 0.01        # scaling factor for J_RyR
    in [1/ms]
k_open = 1          # rate constant for RyR opening
    in [1/ms]
k_close = 0.16      # rate constant for RyR closing
    in  [1/ms]
j_1 = 3.51
    in [1]
j_2 = 530
    in [uM]
j_3 = 200
    in [uM]
j_4 = 0.25
    in [1]

J_RyR = k_RyR * P_open * (ca_conc_sr.Ca_SRrelease - ca_conc.Ca_subSR)
    in [uM/ms]
J_RyRCaffeine = 5.5e-4 * (ca_conc_sr.Ca_SRrelease - ca_conc.Ca_subSR)
    in [uM/ms]
K_mRyR = j_1 * (1 + exp((ca_conc_sr.Ca_SRrelease - j_2) / j_3)) ^ (-1) + j_4
    in [uM]
P_closed = 1 - P_open
    in [1]

dot(P_open) = P_closed * k_open * ca_conc.Ca_subSR ^ 4 / (K_mRyR ^ 4 + ca_conc.Ca_subSR ^ 4) - k_close * P_open
    in [1]

[serca]
V_max = 0.9996      # maximum SERCA calcium_fluxes
    in [uM/ms]
K_mf = 0.5          # half-saturation for forward SERCA
    in [uM]
K_mr = 7000 * K_mf  # half-saturation for reverse SERCA
    in [uM]
H = 2               # hill coefficient for SERCA
    in [1]

J_SERCA = (V_max * (ca_conc.Ca_subSR / K_mf) ^ H - V_max * (ca_conc_sr.Ca_SRuptake / K_mr) ^ H) / (1 + (ca_conc.Ca_subSR / K_mf) ^ H + (ca_conc_sr.Ca_SRuptake / K_mr) ^ H)
    in [uM/ms]

[leak_flux]
k_leak = 5e-6       # SR leak rate constant
    in [1/ms]

J_leak = k_leak * (ca_conc_sr.Ca_SRuptake - ca_conc.Ca_subSR)
    in [uM/ms]

[ca_diffusion]
tau_tr = 100        # time constant for J_tr
    in [ms]

J_tr = (ca_conc_sr.Ca_SRuptake - ca_conc_sr.Ca_SRrelease) / tau_tr
    in [uM/ms]

[ca_conc_sr]
CSQN_tot = 24750        # total calsequestrin concentration
    in [uM]
K_mCSQN = 800           # half-saturation for calsequestrin
    in [uM]
V_SRuptake = 0.08127    # volume of SRuptake compartment
    in [pL]
V_SRrelease = 0.009030  # volume of SRrelease compartment
    in [pL]

beta_SRrelease = (1 + CSQN_tot * K_mCSQN / ((Ca_SRrelease + K_mCSQN) ^ 2)) ^ (-1)

dot(Ca_SRuptake) = (serca.J_SERCA - leak_flux.J_leak - ca_diffusion.J_tr) / V_SRuptake
    in [uM]
dot(Ca_SRrelease) = beta_SRrelease * (-ryanodine_receptors.J_RyR + ca_diffusion.J_tr) / V_SRrelease
    in [uM]

Ca_SR = (Ca_SRuptake * V_SRuptake + Ca_SRrelease * V_SRrelease) / (V_SRuptake + V_SRrelease)
    in [uM]

# Cytosol - Korhonen et al. (2009)
[na_conc]
use membrane.V_myo as V_myo
use membrane.Acap as Acap
use membrane.Cm as Cm
use membrane.F as F
use membrane.FoRT as FoRT
use membrane.Na_o as Na_o

dot(Na_i) = -(ina.i_Na + inab.i_Nab + iha.i_haNa + 3 * incx.i_NCX + 3 * inak.i_NaK) * Acap * Cm / (V_myo * F * 1e-6)
    in [uM]
#Na_i = 1.5e4
#    in [uM]
E_Na = 1 / FoRT * log(Na_o / Na_i)
    in [mV]

[k_conc]
use membrane.V_myo as V_myo
use membrane.Acap as Acap
use membrane.Cm as Cm
use membrane.F as F
use membrane.FoRT as FoRT
use membrane.K_o as K_o

dot(K_i) = -(iha.i_haK + ito.i_to + ik1.i_K1 + ikr.i_Kr - 2 * inak.i_NaK + membrane.i_stim) * Acap * Cm / (V_myo * F * 1e-6)
    in [uM]
#K_i = 1.2e5
#    in [uM]
E_K = 1 / FoRT * log(K_o / K_i)
    in [mV]

[ca_conc]
use membrane.pi as pi
use membrane.FoRT as FoRT
use membrane.Ca_o as Ca_o
use membrane.Acap as Acap
use membrane.Cm as Cm
use membrane.F as F
use membrane.V_myo as V_myo
use membrane.r_SR as r_SR
use membrane.r_SL as r_SL


K_mTRPN = 0.5   # half-saturation for troponin
    in [uM]
TRPN_tot = 35   # total troponin concentration
    in [uM]
K_mCMDN = 2.38  # half-saturation for calmodulin
    in [uM]
CMDN_tot = 50   # total calmodulin concentration
    in [uM]

J_CaSR = ryanodine_receptors.J_RyR - serca.J_SERCA + leak_flux.J_leak
    in [uM/ms]
J_CaSL = (2 * incx.i_NCX - ical.i_CaL - icat.i_CaT - icab.i_Cab) * Acap * Cm / (2 * F * 1e-6)
    in [uM/ms]


beta = (1 + TRPN_tot * K_mTRPN / ((Ca_i + K_mTRPN) ^ 2) + CMDN_tot * K_mCMDN / ((Ca_i + K_mCMDN) ^ 2)) ^ (-1)
    in [1]
dot(Ca_i) = beta * (J_CaSR + J_CaSL) / V_myo
    in [uM]

Ca_subSR = Ca_i
    in [uM]
Ca_subSL = Ca_i
    in [uM]
E_Ca = 1 / (2 * FoRT) * log(Ca_o / Ca_i)
    in [mV]
