[[model]]
name: Bondarenko 2004 Rapidly activating delayed rectifier K Current
author: Charles Houston

# Initial values
membrane.V = -67.0
ikur.a_ur                 = 4.17069000000000001e-4
ikur.i_ur                 = 0.998543

[environment]
time = 0 bind time
    in [ms]

[membrane]
dot(V) = -ikur.i_Kur
    in [mV]
T = 310
    in [K]
F = 96.5
    in [C/mmol]
R = 8.314
    in [J/mol/K]
Ko = 5400
    in [uM]
Ki = 143720
    in [uM]

[ikur]
use membrane.V as V
g_Kur = 0.0975
    in [mS/uF]
E_K = (membrane.R * membrane.T / membrane.F) * log(membrane.Ko / membrane.Ki)
    in [mV]
G_Kur = g_Kur * a_ur * i_ur
    in [mS/uF]
i_Kur = G_Kur * (V - E_K)
    in [pA/pF]

dot(a_ur) = (a_ur_ss - a_ur) / tau_a_ur
    in [1]
a_ur_ss = 1 / (1 + exp(-(V + assk1) / assk2))
    in [1]
tau_a_ur = atauk1 * exp(-(atauk2 * 1e-2 * V)) + atauk3
    in [ms]

assk1 = 22.5
    in [mV]
assk2 = 7.5
    in [mV]
atauk1 = 0.493
    in [ms]
atauk2 = 6.29
    in [1/mV]
atauk3 = 2.058
    in [mV]

dot(i_ur) = (i_ur_ss - i_ur) / tau_i_ur
    in [1]
i_ur_ss = 1 / (1 + exp((V + issk1) / issk2))
    in [1]
tau_i_ur = itauk1 * 1000 - itauk2 * 100 / (1 + exp((V + itauk3) / itauk4))
    in [ms]

issk1 = 45.2
    in [mV]
issk2 = 5.7
    in [mV]
itauk1 = 1.2
    in [ms]
itauk2 = 1.7
    in [ms]
itauk3 = 45.2
    in [mV]
itauk4 = 5.7
    in [mV]
